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Source:Signal%20Properties:DataIOFilter int SourceCh= 64 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 40 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 1000Hz 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 64 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 64 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 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1 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= c:\temp\pb_data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= Name Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Playback:FilePlaybackADC string PlaybackFileName= d:\research\subjects\fc9643\d2\fc9643_ud_mot_t001\fc9643_ud_mot_tS001R02.dat // the path to the existing BCI2000 data file (inputfile)
Source:Playback:FilePlaybackADC int PlaybackStartTime= 0s 0s % % // the start time of the file
Source:Playback:FilePlaybackADC list PlaybackChList= 0 // a list of channels to acquire (empty for all). Use indices, or labels from the ChannelNames as they were recorded in the file.
Source:Playback:FilePlaybackADC float PlaybackSpeed= 1 1 0 100 // a value indicating the factor by which the acquisition should be sped up
Source:Playback:FilePlaybackADC int PlaybackStates= 0 0 0 1 // play back state variable values (except timestamps)? (boolean)
Source:Playback:FilePlaybackADC int PlaybackLooped= 0 0 0 1 // loop playback at the end of the data file instead of suspending execution (boolean)
Source:Playback:FilePlaybackADC int PlaybackReverseData= 0 0 0 1 // play the biosignal data backwards - does not affect state playback (boolean)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 4 1 2 3 4 // list of transmitted channels
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 FilePlaybackADC 1 GDFFileWriter 1 EDFFileWriter 1 BCI2000FileWriter 1 NullFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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System:Configuration matrix SignalProcessingFilterChain= 1 { Filter%20Name Position%20String } IdentityFilter 2.0 // SignalProcessing filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes, empty for off
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20320 % % // IP address/port to write to, e.g. localhost:20320
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System:Configuration matrix ApplicationFilterChain= 3 { Filter%20Name Position%20String } ConnectorInput 2.9999 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain
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