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Source:Signal%20Properties:DataIOFilter int SourceCh= 64 // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 40 // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 1200Hz // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 64 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 64 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 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1 0.003 % % // gain for each channel (A/D units per physical unit)
Storage:Data%20Location:DataIOFilter string DataDirectory= d:/research/subjects/abcdef/d5/goal_bci ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= abcdef_goal_bci Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 03 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:gUSBampADC intlist SourceChList= 64 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 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64 0 1 128 // list of channels to digitize
Source:gUSBampADC intlist SourceChDevices= 4 16 16 16 16 16 1 17 // number of digitized channels per device
Source:gUSBampADC int NumBuffers= 5 1 2 32 // number of software buffers to use
Source:gUSBampADC string DeviceIDMaster= UA-2007.02.14 // deviceID for the device whose SYNC goes to the slaves
Source:gUSBampADC int FilterEnabled= 1 1 0 1 // Enable pass band filter (0=no, 1=yes)
Source:gUSBampADC float FilterHighPass= 0.5 0.1 0 50 // high pass filter for pass band
Source:gUSBampADC float FilterLowPass= 500 60 0 4000 // low pass filter for pass band
Source:gUSBampADC int FilterModelOrder= 8 8 1 12 // filter model order for pass band
Source:gUSBampADC int FilterType= 1 1 1 2 // filter type for pass band (1=BUTTERWORTH, 2=CHEBYSHEV)
Source:gUSBampADC int NotchEnabled= 1 1 0 1 // Enable notch (0=no, 1=yes)
Source:gUSBampADC float NotchHighPass= 58 58 0 70 // high pass filter for notch filter
Source:gUSBampADC float NotchLowPass= 62 62 0 4000 // low pass filter for notch filter
Source:gUSBampADC int NotchModelOrder= 4 4 1 10 // filter model order for notch filter
Source:gUSBampADC int NotchType= 1 1 1 2 // filter type for pass band (1=CHEBYSHEV, 2=BUTTERWORTH)
Source:gUSBampADC list DeviceIDs= 4 UA-2007.02.14 UA-2007.02.15 UA-2007.04.06 UA-2007.04.07 // list of USBamps to be used (or auto)
Source:gUSBampADC int DigitalInput= 0 0 0 1 // enable digital input:  0: false, 1: true (enumeration)
Source:gUSBampADC int DigitalOutput= 0 0 0 1 // enable digital output on block acquisition (boolean)
Source:gUSBampADC string DigitalOutputEx= % // expression for output on digital output 2 (expression)
Source:gUSBampADC int SignalType= 1 0 0 1 // numeric type of output signal:  0: int16, 1: float32 (enumeration)
Source:gUSBampADC int AcquisitionMode= 0 0 0 2 // data acquisition mode:  0: analog signal acquisition, 1: calibration, 2: impedance (enumeration)
Source:gUSBampADC int CommonGround= 1 0 0 1 // internally connect GNDs from all blocks:  0: false, 1: true (enumeration)
Source:gUSBampADC int CommonReference= 1 0 0 1 // internally connect Refs from all blocks:  0: false, 1: true (enumeration)
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 64 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 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61 62 63 64 // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)(readonly)
Storage:Data%20Location:RunManager string DataFile= $%7bSubjectName%7d$%7bSubjectSession%7d/$%7bSubjectName%7dS$%7bSubjectSession%7dR$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 gUSBampADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain(readonly)
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Filtering:SpatialFilter int SpatialFilterType= 1 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 64 64 0.937500 -0.062500 -0.062500 -0.062500 -0.062500 -0.062500 -0.062500 -0.062500 -0.062500 -0.062500 -0.062500 -0.062500 -0.062500 -0.062500 -0.062500 -0.062500 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 0.000000 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0.937500 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // when using CAR filter type: list of output channels, or empty for all channels
Filtering:SpatialFilter:SpatialFilter int SpatialFilterMissingChannels= 1 0 0 1 // how to handle missing channels 0: ignore, 1: report error (enumeration)
Filtering:Spectral%20Estimation:ARThread float FirstBinCenter= 70Hz 0Hz % % // Center of first frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARThread float LastBinCenter= 90Hz 30Hz % % // Center of last frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARThread float BinWidth= 5Hz 3Hz % % // Width of spectral bins (in Hz)
Filtering:Spectral%20Estimation:ARThread int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: Coefficients (enumeration)
Filtering:AR%20Spectral%20Estimator:ARThread int ModelOrder= 16 16 0 % // AR model order
Filtering:AR%20Spectral%20Estimator:ARThread int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Filtering:Windowing:WindowingThread int WindowLength= 0.5s 0.5s % % // Length of window
Filtering:Windowing:WindowingThread int Detrend= 0 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:Windowing:WindowingThread int WindowFunction= 0 0 0 3 // Window function 0: Rectangular, 1: Hamming, 2: Hann, 3: Blackman (enumeration)
Filtering:LinearClassifier matrix Classifier= 335 { input%20channel input%20element%20(bin) output%20channel weight } 1 1 1 1 1 2 1 1 1 3 1 1 1 4 1 1 1 5 1 1 32 1 2 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64 5 67 1 // Linear classification matrix in sparse representation
Filtering:LPFilterWithChannelSelection float LPTimeConstant= 1s 16s 0 % // time constant for the low pass filter
Filtering:LPFilterWithChannelSelection intlist LPChannels= 3 1 2 3 % 0 % // channels to process (leave empty for all)
Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 1 1 % // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
Filtering:Normalizer floatlist NormalizerOffsets= 67 0 32.1376 0 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 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1 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 67 0 0.211283 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 67 0 2 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 8 2 (TargetCode==1)&&(Feedback==1) (TargetCode==1)&&(Feedback==1) (TargetCode==2)&&(Feedback==1) (TargetCode==2)&&(Feedback==1) (TargetCode==3)&&(Feedback==1) (TargetCode==3)&&(Feedback==1) (TargetCode==4)&&(Feedback==1) (TargetCode==4)&&(Feedback==1) (TargetCode==5)&&(Feedback==1) (TargetCode==5)&&(Feedback==1) (TargetCode==6)&&(Feedback==1) (TargetCode==6)&&(Feedback==1) (TargetCode==7)&&(Feedback==1) (TargetCode==7)&&(Feedback==1) (TargetCode==8)&&(Feedback==1) (TargetCode==8)&&(Feedback==1) // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 6s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= (Feedback==0) // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
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System:Configuration matrix SignalProcessingFilterChain= 6 { Filter%20Name Position%20String } SpatialFilter 2.B ARFilter 2.C LinearClassifier 2.D LPFilterWithChannelSelection 2.D1 ExpressionFilter 2.D2 Normalizer 2.E // SignalProcessing filter chain(readonly)
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 1280 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 1024 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= 1920 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0xffffff 0x505050 % % // Application window background color (color)
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Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing:FeedbackTask float PreRunDuration= 2s 2s 0 % // duration of pause preceding first trial
Application:Sequencing:FeedbackTask float PreFeedbackDuration= 2s 2s 0 % // duration of target display prior to feedback
Application:Sequencing:FeedbackTask float FeedbackDuration= 6s 3s 0 % // duration of feedback
Application:Sequencing:FeedbackTask float PostFeedbackDuration= 1s 1s 0 % // duration of result display after feedback
Application:Sequencing:FeedbackTask float ITIDuration= 1s 1s 0 % // duration of inter-trial interval
Application:Sequencing:FeedbackTask float MinRunLength= % 120s 0 % // minimum duration of a run; if blank, NumberOfTrials is used
Application:Sequencing:FeedbackTask int NumberOfTrials= 32 0 0 % // number of trials; if blank, MinRunLength is used
Application:Targets:FeedbackTask int NumberTargets= 8 2 0 255 // number of targets
Application:Targets:FeedbackTask intlist TargetSequence= 32 3 2 5 7 4 6 8 1 2 4 8 5 6 3 1 7 8 2 5 4 7 6 3 1 4 1 3 8 5 7 6 2 1 % % // fixed sequence in which targets should be presented (leave empty for random)
Application:FeatureLogging:FeatureLoggingFeedbackTask int NumberOfChannelsToSkip= 3 0 0 64 // number of feature channels to skip when logging features, normally 3.
Application:Window:GoalInferenceCursorFeedbackTask int RenderingQuality= 1 0 0 1 // rendering quality: 0: low, 1: high (enumeration)
Application:Sequencing:GoalInferenceCursorFeedbackTask float MaxFeedbackDuration= 6s % 0 % // abort a trial after this amount of feedback time has expired
Application:3DEnvironment:GoalInferenceCursorFeedbackTask floatlist CameraPos= 3 50 50 150 // camera position vector in percent coordinates of 3D area
Application:3DEnvironment:GoalInferenceCursorFeedbackTask floatlist CameraAim= 3 50 50 50 // camera aim point in percent coordinates
Application:3DEnvironment:GoalInferenceCursorFeedbackTask int CameraProjection= 0 0 0 2 // projection type: 0: flat, 1: wide angle perspective, 2: narrow angle perspective (enumeration)
Application:3DEnvironment:GoalInferenceCursorFeedbackTask floatlist LightSourcePos= 3 50 50 100 // light source position in percent coordinates
Application:3DEnvironment:GoalInferenceCursorFeedbackTask int LightSourceColor= 0x808080 // light source RGB color (color)
Application:3DEnvironment:GoalInferenceCursorFeedbackTask int WorkspaceBoundaryColor= 0xFFFFFF 0 % % // workspace boundary color (0xff000000 for invisible) (color)
Application:3DEnvironment:GoalInferenceCursorFeedbackTask string WorkspaceBoundaryTexture= % // path of workspace boundary texture (inputfile)
Application:Cursor:GoalInferenceCursorFeedbackTask float CursorWidth= 3 10 0.0 % // feedback cursor width in percent of screen width
Application:Cursor:GoalInferenceCursorFeedbackTask int CursorColorFront= 0xD60000 // cursor color when it is at the front of the workspace (color)
Application:Cursor:GoalInferenceCursorFeedbackTask int CursorColorBack= 0xD60000 // cursor color when it is in the back of the workspace (color)
Application:Cursor:GoalInferenceCursorFeedbackTask string CursorTexture= % // path of cursor texture (inputfile)
Application:Cursor:GoalInferenceCursorFeedbackTask floatlist CursorPos= 3 50 50 50 // cursor starting position
Application:Targets:GoalInferenceCursorFeedbackTask matrix Targets= 8 { pos%20x pos%20y pos%20z width%20x width%20y width%20z } 50 85 50 10 10 10 50 85 50 20 20 20 50 72 50 10 10 10 50 72 50 20 20 20 50 28 50 10 10 10 50 28 50 20 20 20 50 15 50 10 10 10 50 15 50 20 20 20 // target positions and widths in percentage coordinates
Application:Targets:GoalInferenceCursorFeedbackTask int TargetColor= 0x1E2270 // target color (color)
Application:Targets:GoalInferenceCursorFeedbackTask string TargetTexture= % // path of target texture (inputfile)
Application:Targets:GoalInferenceCursorFeedbackTask int TestAllTargets= 0 0 0 1 // test all targets for cursor collision? 0: test only the visible current target, 1: test all targets (enumeration)
Application:Targets:GoalInferenceCursorFeedbackTask float TargetDwellTime= 1s % 0 % // amount of time user must dwell on target to succeed in trial 
Application:Biasing:GoalInferenceCursorFeedbackTask int BiasActive= 0 0 0 1 // determines whether or not biasing is occuring (boolean)
Application:Biasing:GoalInferenceCursorFeedbackTask string ModelFile= D:/research/code/output/GoalBCI/meta/a9952e/SvmTrainingData.model // path to SVM model file (inputfile)
Application:Biasing:GoalInferenceCursorFeedbackTask float BiasMagnitude= 1 % 0 1 // amount to bias start position from 0 (none) to 1 (half of screen). 
Application:Biasing:GoalInferenceCursorFeedbackTask intlist CatchTrials= 16 1 3 4 8 9 10 11 13 19 21 23 24 25 28 31 32 // trial numbers where biasing WILL NOT occur
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= 1 1 % // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 GoalInferenceCursorFeedbackTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain(readonly)
System:Randomization int RandomSeed= 5786 0 % % // seed for the BCI2000 pseudo random number generator(readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)(readonly)
